CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "tifDNA-")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifUb-")
    Name to assign these images:Ub
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifPhalloidin-")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifpUb-")
    Name to assign these images:pUb
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Ub
    Name the primary objects to be identified:Ub
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:150
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:pUb
    Name the primary objects to be identified:pUbSpots
    Typical diameter of objects, in pixel units (Min,Max):5,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:8|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
    Parent objects:Nuclei
    Child objects:pUbSpots
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:pUbCell
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
RelateObjects:[module_num:9|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
    Parent objects:Nuclei
    Child objects:Ub
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:UbCell
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:DNA, Ub, pUb
    Select objects to measure:Nuclei, Ub, UbCell, pUbCell, pUbSpots

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Nuclei, Ub, UbCell, pUbCell, pUbSpots
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|/Volumes/Cell Biology/Harper Lab/Felix/NIC/Lucille Two/20230222_HEK293t_FBXO7_GFP-Parkin_Tom20-568_pUb-647_1hAO-CCCP/CellProfilerEval
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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